PsychoPy2experiment version="1.84.2"
Settings
  Monitor = testMonitor
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = BasicTrial
  Units = use prefs
  Screen = 1
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Routines
  Routine BlankWait
    ImageComponent BlankPic
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image = ./BlankPic.png
      size = (0.5, 0.5)
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  Routine trial
    ImageComponent image
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 0.0
      image = ./BlankPic.png
      size = (0.5, 0.5)
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    ImageComponent image_2
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 0.0
      image = ./FocalPic.png
      size = (0.5, 0.5)
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    ImageComponent image_3
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 0.0
      image = ./EastPic.png
      size = (0.5, 0.5)
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  Routine Reward
    ImageComponent RewardImage
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image = ./RewardPic.jpg
      size = (0.5, 0.5)
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  Routine Focal
    ImageComponent FocalPic
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      image = ./FocalPic.png
      size = (0.5, 0.5)
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  Routine RandomStimuli
    CodeComponent RandomPicControl
      Begin Experiment:
        randomNumber = randint(0,4)
        if randomNumber == 0:
            East.draw()
        elif randomNumber == 1:
            West.draw()
        elif randomNumber == 2:
            North.draw()
        else:
            South.draw()
    ImageComponent East
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image = ./EastPic.png
      size = (0.5, 0.5)
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    ImageComponent West
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image = ./WestPic.png
      size = (0.5, 0.5)
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    ImageComponent North
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image = ./NorthPic.png
      size = (0.5, 0.5)
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    ImageComponent South
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image = ./SouthPic.png
      size = (0.5, 0.5)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine BlankWait
    Routine Focal
    Routine RandomStimuli
    Routine Reward
  LoopTerminator trials
